CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150331131333
GitHash:19da3a8
ModuleCount:40
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:8
    Single images count:0
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    Select the rule criteria:and (file does contain "cy5")
    Name to assign these images:panepi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "nuc")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cy3")
    Name to assign these images:lumepi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "fitc")
    Name to assign these images:fitc
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cy7")
    Name to assign these images:basepi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "g_im")
    Name to assign these images:amacr
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "r_im")
    Name to assign these images:ar
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "h_im")
    Name to assign these images:hematozyyli
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ApplyThreshold:[module_num:5|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
    Select the input image:basepi
    Name the output image:ThreshBasepi
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.0824
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:panepi
    Name the primary objects to be identified:glands
    Typical diameter of objects, in pixel units (Min,Max):50,1500
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:dapi
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:10
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:nuclei
    Name the objects to be identified:panepi
    Select the method to identify the secondary objects:Propagation
    Select the input image:panepi
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:panepi
    Select the smaller identified objects:nuclei
    Name the tertiary objects to be identified:epithelia
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:nuclei
    Select objects to measure:epithelia
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:11|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
    Hidden:8
    Select an image to measure:basepi
    Select an image to measure:panepi
    Select an image to measure:dapi
    Select an image to measure:amacr
    Select an image to measure:ar
    Select an image to measure:fitc
    Select an image to measure:hematozyyli
    Select an image to measure:lumepi
    Select objects to measure:glands
    Select objects to measure:nuclei

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:panepi
    Select objects to measure:panepi

MaskObjects:[module_num:13|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
    Select objects to be masked:glands
    Name the masked objects:MaskGlandsBasepi
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThreshBasepi
    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:14|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
    Select objects to be masked:glands
    Name the masked objects:MaskGlandsCancer
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskGlandsBasepi
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

MaskObjects:[module_num:15|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
    Select objects to be masked:nuclei
    Name the masked objects:MaskNucleiBasepiGlands
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskGlandsBasepi
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:16|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
    Select objects to be masked:nuclei
    Name the masked objects:MaskNucleiCancer
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskGlandsCancer
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:17|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
    Select objects to be masked:MaskNucleiBasepiGlands
    Name the masked objects:MaskNucleiBasepi
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThreshBasepi
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:18|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
    Select objects to be masked:MaskNucleiBasepiGlands
    Name the masked objects:MaskNucleiNonBasepi
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskNucleiBasepi
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

MaskObjects:[module_num:19|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
    Select objects to be masked:nuclei
    Name the masked objects:MaskNucleiOutsideGlands
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:glands
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

RelateObjects:[module_num:20|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
    Select the input child objects:MaskNucleiBasepi
    Select the input parent objects:nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:21|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
    Select the input child objects:MaskNucleiNonBasepi
    Select the input parent objects:nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:dapi
    Name the output image:dapiOverlay
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:#00FE00
    Load outlines from an image or objects?:Objects
    Select objects to display:nuclei

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:panepi
    Name the output image:panOverlay
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:#00FE00
    Load outlines from an image or objects?:Objects
    Select objects to display:epithelia

OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:panepi
    Name the output image:glandsOverlay
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:#00FE00
    Load outlines from an image or objects?:Objects
    Select objects to display:glands

ConvertObjectsToImage:[module_num:25|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
    Select the input objects:MaskNucleiCancer
    Name the output image:MaskNucleiCancerImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:26|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
    Select the input objects:MaskNucleiBasepi
    Name the output image:MaskNucleiBasepiImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:27|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
    Select the input objects:MaskNucleiNonBasepi
    Name the output image:MaskNucleiNonBasepiImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:28|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
    Select the input objects:MaskNucleiOutsideGlands
    Name the output image:MaskNucleiOutsideGlandsImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:29|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
    Select the input objects:nuclei
    Name the output image:NucleiLabel
    Select the color format:uint16
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
GrayToColor:[module_num:30|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
    Select a color scheme:RGB
    Select the image to be colored red:MaskNucleiCancerImage
    Select the image to be colored green:MaskNucleiBasepiImage
    Select the image to be colored blue:MaskNucleiNonBasepiImage
    Name the output image:ClassifiedNuclei
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:panOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:panepi
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Projects/080915_export/prostate_cocktail/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:glandsOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:panepi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_glands
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Projects/080915_export/prostate_cocktail/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:dapiOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Projects/080915_export/prostate_cocktail/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:MaskNucleiCancerImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MaskNucleiCancer
    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Projects/080915_export/prostate_cocktail/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:MaskNucleiBasepiImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MaskNucleiBasepi
    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Projects/080915_export/prostate_cocktail/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:MaskNucleiNonBasepiImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MaskNucleiNonBasepi
    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Projects/080915_export/prostate_cocktail/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:MaskNucleiOutsideGlandsImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MaskNucleiOutsideGlands
    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Projects/080915_export/prostate_cocktail/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:ClassifiedNuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ClassifiedNuclei
    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Projects/080915_export/prostate_cocktail/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:NucleiLabel
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiLabel
    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Projects/080915_export/prostate_cocktail/results/img
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:40|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Output file location:Default Input Folder sub-folder|Projects/080915_export/prostate_cocktail/results/anal
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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