CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20150331131333
GitHash:19da3a8
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:8
    Single images count:0
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    Select the rule criteria:and (file does contain "cy7")
    Name to assign these images:cd8
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "fitc")
    Name to assign these images:foxp3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cy5")
    Name to assign these images:leukocytes
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "g_im")
    Name to assign these images:epithelium
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "nuc")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cy3")
    Name to assign these images:cd4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "r_im")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "h_im")
    Name to assign these images:hematoxylin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:epithelium
    Name the primary objects to be identified:EpitheliumGlands
    Typical diameter of objects, in pixel units (Min,Max):20,1000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1.0
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    Manual threshold:0.1
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
ApplyThreshold:[module_num:6|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
    Select the input image:leukocytes
    Name the output image:ThreshLeukocytes
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.1
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
Morph:[module_num:7|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
    Select the input image:dapi
    Name the output image:MorphDAPI
    Select the operation to perform:erode
    Number of times to repeat operation:Once
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    Diameter:5.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MorphDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:10
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
MeasureObjectIntensity:[module_num:9|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
    Hidden:7
    Select an image to measure:epithelium
    Select an image to measure:leukocytes
    Select an image to measure:Ki67
    Select an image to measure:foxp3
    Select an image to measure:cd4
    Select an image to measure:cd8
    Select an image to measure:hematoxylin
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

MaskObjects:[module_num:11|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
    Select objects to be masked:Nuclei
    Name the masked objects:MaskedNucleiEpithelium
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:EpitheliumGlands
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:12|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
    Select objects to be masked:Nuclei
    Name the masked objects:MaskedNucleiNonEpithelium
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:EpitheliumGlands
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

MaskObjects:[module_num:13|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
    Select objects to be masked:MaskedNucleiEpithelium
    Name the masked objects:NucleiEpitheliumLeukocytes
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThreshLeukocytes
    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:14|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
    Select objects to be masked:MaskedNucleiNonEpithelium
    Name the masked objects:NucleiRestLeukocytes
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThreshLeukocytes
    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:15|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
    Select objects to be masked:MaskedNucleiEpithelium
    Name the masked objects:NucleiRestEpithelium
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucleiEpitheliumLeukocytes
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

MaskObjects:[module_num:16|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
    Select objects to be masked:MaskedNucleiNonEpithelium
    Name the masked objects:NucleiNonClass
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThreshLeukocytes
    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:Yes

RelateObjects:[module_num:17|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
    Select the input child objects:Nuclei
    Select the input parent objects:NucleiEpitheliumLeukocytes
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:18|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
    Select the input child objects:Nuclei
    Select the input parent objects:NucleiRestLeukocytes
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:19|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
    Select the input child objects:Nuclei
    Select the input parent objects:NucleiRestEpithelium
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:20|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
    Select the input child objects:Nuclei
    Select the input parent objects:NucleiNonClass
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:dapi
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:#00FE00
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

ConvertObjectsToImage:[module_num:22|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
    Select the input objects:NucleiEpitheliumLeukocytes
    Name the output image:NucleiEpitheliumLeukocytesImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:23|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
    Select the input objects:NucleiRestLeukocytes
    Name the output image:NucleiRestLeukocytesImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:24|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
    Select the input objects:NucleiRestEpithelium
    Name the output image:NucleiRestEpitheliumImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:25|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
    Select the input objects:NucleiNonClass
    Name the output image:NucleiNonClassImage
    Select the color format:Binary (black & white)
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
GrayToColor:[module_num:26|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
    Select a color scheme:RGB
    Select the image to be colored red:NucleiRestEpitheliumImage
    Select the image to be colored green:NucleiEpitheliumLeukocytesImage
    Select the image to be colored blue:NucleiRestLeukocytesImage
    Name the output image:ColoredClasses
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Projects/080915_export/immune_cocktail/reg/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Objects
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    Select the objects to save:NucleiEpitheliumLeukocytes
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Class1
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Projects/080915_export/immune_cocktail/reg/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:29|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
    Select the type of image to save:Objects
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    Select the objects to save:NucleiRestLeukocytes
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Class2
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Projects/080915_export/immune_cocktail/reg/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:30|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
    Select the type of image to save:Objects
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    Select the objects to save:NucleiRestEpithelium
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Class3
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Projects/080915_export/immune_cocktail/reg/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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
    Select the type of image to save:Objects
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    Select the objects to save:NucleiNonClass
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Class4
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Projects/080915_export/immune_cocktail/reg/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:ColoredClasses
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    Select method for constructing file names:From image filename
    Select image name for file prefix:dapi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Classes
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Projects/080915_export/immune_cocktail/reg/results/img
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Output file location:Default Input Folder sub-folder|Projects/080915_export/immune_cocktail/reg/results/anal
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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